20190522_174254 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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5,0;96 Well Microplate;MP96 Orig
5,1;96 Well Microplate;MP96 fake cretaed by evow
11,0;AntiCOntamination;AntiCon1
11,1;AntiCOntamination;AntiCon2
11,2;AntiCOntamination;AntiCon3
11,3;AntiCOntamination;AntiCon4
11,4;AntiCOntamination;AntiCon5
11,5;AntiCOntamination;AntiCon6
11,9;AntiCOntamination;AntiCon7
11,11;AntiCOntamination;AntiCon8
11,14;AntiCOntamination;AntiCon9
11,18;AntiCOntamination;AntiCon10
11,22;AntiCOntamination;AntiCon11
11,27;AntiCOntamination;AntiCon12
11,34;AntiCOntamination;AntiCOn13
12,0;Sampletubes Eppendorfrack;Samples1
13,0;Sampletubes Eppendorfrack;Samples2
14,0;Sampletubes Eppendorfrack;Samples3
15,0;Sampletubes Eppendorfrack;Samples4
16,0;Sampletubes Eppendorfrack;Samples5
17,0;Sampletubes Eppendorfrack;Samples6
19,0;Washstation 2Grid Cleaner short;Cleaner1
19,1;Washstation 2Grid Waste;Waste
19,2;Washstation 2Grid Cleaner long;Cleaner2
19,4;Trough 100ml;IC2-RNA
19,6;Washstation 2Grid DiTi Waste;DiTi Waste
22,0;Tube Falcon 15ml 12 Pos;DNase
23,0;96 Well Separation Plate;AGOWA
33,0;96 Well Macherey-Nagel Plate;Filterplatte
43,0;FilterplateaufElutionplate flach;Labware1
43,1;FilterplateaufElutionplate flach;Filterplatte auf Elutionsplatte
43,2;96 Well 8er Macherey-Nagel flach;SQW
53,0;Trough 100ml;RA4
53,1;Trough 100ml;MDB
53,2;Trough 100ml;Wasser
54,0;Trough 100ml;RA3/2
54,1;Trough 100ml;RA3/1
54,2;Trough 100ml;RA2
55,0;DiTi 1000ul;DiTi1000/2
55,1;DiTi 1000ul;DiTi1000/1
1;System
1;Te-Shake 2Pos
1;Shelf 8+6Pos
66;Hotel 5Pos DeepWell;FilterplateaufElutionplate
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--{ RPG }--
Comment("Prefill 1 plates with Buffer Reagent for 96 samples.");
Set_DITI_Counter2("DiTi 1000ul","55","1","1");
Wash(255,19,1,19,0,"5",50,"10",50,0,50,100,1,0,1000,0);
Transfer_Rack("5","5",1,0,1,0,0,"","96 Well Microplate","Narrow","","","MP 3Pos","","MP 3Pos","1","(Not defined)","2");
Transfer_Rack("43","43",1,0,1,0,0,"","FilterplateaufElutionplate flach","Narrow","","","MP 3Pos Cooled","","MP 3Pos Cooled","2","(Not defined)","1");
Group("Prefill plates with BufferReact");
UserPrompt("Put the plates for BufferReact",1,-1);
Group("Spread: 100.0 µL of Buffer ");
Comment("Spread: 100.0 µL of Buffer  (9984.0 µL total) from [grid:53 site:1 ['well 1 in RA4 :  with 9984.0 uL of Buffer '] into Filterplatte[grid:33 site:2] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 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96]:");
GetDITI2(254,"DiTi 1000ul",0,0,0,300);
Aspirate(254,"Water for DITI 1000",0,"900.00","900.00","900.00","900.00","900.00","900.00","900.00",0,0,0,0,53,0,1,"0108®1",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,5,1,1,"0C08®1000000000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C080¬300000000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C0800¨70000000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C08000 ?000000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C080000O00000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C0800000po0000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C080000000¯000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C0800000000®10000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C08000000000¬3000",0,0);
Aspirate(254,"Water for DITI 1000",0,"300.00","300.00","300.00","300.00","300.00","300.00","300.00",0,0,0,0,53,0,1,"0108®1",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C080000000000¨700",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C0800000000000 ?0",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,0,1,"0C08000000000000O",0,0);
GroupEnd();
DropDITI(255,19,6,0,300,0);
GroupEnd();
